# Generated by Configurator on Thu Dec 26 16:26:00 EST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM7,SerialManager,COM7
Device,COM4,SerialManager,COM4
Device,Andor,Andor,Andor
Device,Arduino,FreeSerialPort,FreeSerialPort
Device,iChrome-MLE,Toptica_iChrome_MLE,iChrome-MLE
Device,Retra UV LED,Lumencor,LightEngine

# Pre-init settings for devices
Property,Andor,Camera,| iXon Ultra | DU888_BVF | 14362 |
Property,Arduino,Port,COM4
Property,iChrome-MLE,Port,COM7
Property,Retra UV LED,Connection,COM8
Property,Retra UV LED,Model,GEN3

# Pre-init settings for COM ports
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Enable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,Retra UV LED
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# iChrome-MLE
Label,iChrome-MLE,2,State-2
Label,iChrome-MLE,1,State-1
Label,iChrome-MLE,0,State-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

